// Detector measurements macro.
// Run with image already open.

// FUNCTIONS

// Returns row y as a pixel array
function getRow(y, width) {
    row = newArray(width);
    for (i = 0; i < width; i++) {
        row[i] = getPixel(i, y);
    }
    return row;
}

// Returns row x as a pixel array
function getColumn(x, height) {
    column = newArray(height);
    for (i = 0; i < height; i++) {
        column[i] = getPixel(x, i);
    }
    return column ;
}

// Returns whether the given array is a black line
function isLine(data) {
    reference = data[0];
    for (i = 0; i < data.length; i++) {
        if (data[i] != reference) return false        
    }
    return true;
}

// Set column x black
function setColumnBlack(x, height) {
    for (i = 0; i < height; i++) {
        setPixel(x, i, 0);
    }
}

// Set row y black
function setRowBlack(y, width) {
    for (i = 0; i < width; i++) {
        setPixel(i, y, 0);
    }
}

// MAIN PROGRAM
//run("Raw...", "open=/tmp/minimapa.raw image=[16-bit Signed] width=336 height=168 offset=0 number=1 gap=0 little-endian");
//run("In [+]");
//run("In [+]");

// Get image name and dimensions
imageName = getTitle();
height = getHeight();
width = getWidth();
gridName = "Grid"; // Name for the grid image

// Create grid image and fill it with white
newImage(gridName, "8-bit white", width, height, 1);

// Iterate the original image, detect column lines
// and set them to black in the grid image
selectImage(imageName);
for (i = 0; i < width; i++) {
    column = getColumn(i, height);
    if (isLine(column)) {
        // Blank column in grid image
        selectWindow(gridName);
        setColumnBlack(i, height);
        selectWindow(imageName);
    }
}

// Same for rows
for (i = 0; i < height; i++) {
    row = getRow(i, width);
    if (isLine(row)) {
        selectWindow(gridName);
        setRowBlack(i, width);
        selectWindow(imageName);
    }
}

// Redirect the measurements to the original image
run("Set Measurements...", "area mean standard redirect=&imageName decimal=3");

// Select the grid and run the particle analyzer
selectImage(gridName);
setThreshold(129, 255);
setOption("BlackBackground", false);
run("Convert to Mask");
run("Analyze Particles...", "size=0-Infinity circularity=0.00-1.00 show=Nothing add");

// Select all ROIs and measure
n = roiManager("count");
rois = newArray(n);
for (i = 0; i < n; i++) rois[i] = i;

roiManager("select", rois);
roiManager("Measure");


lysoMeansArray = newArray(n/2);
lysoStdArray = newArray(n/2);
gsoMeansArray = newArray(n/2);
gsoStdArray = newArray(n/2);
//Now I save the means and the std values
for ( i = 0; i < n/2; i ++){
	lysoMeansArray[i] = getResult("Mean",i);
	lysoStdArray[i] = getResult("StdDev",i);
	gsoMeansArray[i] = getResult("Mean",n/2+i);
        gsoStdArray[i] = getResult("StdDev",n/2+i);
}

//get the mean of all the means for the two crystals
Array.getStatistics(lysoMeansArray, minLyso, maxLyso, meanLyso, stdDevLyso) ;
Array.getStatistics(gsoMeansArray, minGso, maxGso, meanGso, stdDevGso);

print("Media LYSO = "+meanLyso);
print("Media GSO = "+meanGso); 

nWrong = 100; 
//take for granted that at the most only a 10
while (nWrong > n/2*0.1) 



